# Instrument driver configuration file.


[General settings]
# The name is shown in all the configuration windows
name: ad_low_noise_float_2023

# The version string should be updated whenever changes are made to this config file

version: 1.0.0

interface: None

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: ad_driver

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
# [Config / Name]
# datatype: STRING
# def_value: ?
# permission: READ
# 
# [Config / Axis]
# datatype: COMBO
# def_value: AXIS2
# combo_def_1: AXIS2
# combo_def_2: AXIS3
# permission: READ

[Logging Driver]
datatype: COMBO
def_value: DEBUG
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING
group: Logging

[Logging AD]
datatype: COMBO
def_value: DEBUG
combo_def_1: DEBUG
combo_def_2: INFO
combo_def_3: WARNING
group: Logging

[duration_max_s]
datatype: DOUBLE
def_value: 3
low_lim: 0.1
group: Configuration

[sample_rate_SPS]
datatype: COMBO
def_value: SPS_97656
combo_def_1: SPS_97656
combo_def_2: SPS_48828
combo_def_3: SPS_24414
combo_def_4: SPS_12207
combo_def_5: SPS_06104
combo_def_6: SPS_03052
group: Configuration

[Input range]
datatype: DOUBLE
unit: V
def_value: 0.001
permission: READ
group: Connected Hardware

[IN_t]
unit: 1
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[IN_disable]
unit: 1
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[IN_voltage]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Measurement

[timeout_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_start_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_end_detected]
datatype: BOOLEAN
def_value: False
permission: READ
group: Measurement

[enable_start_s]
datatype: DOUBLE
def_value: 0.0
permission: READ
group: Measurement

[enable_s]
datatype: DOUBLE
def_value: 0.0
permission: READ
group: Measurement
